PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s/Calibration/%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'] )
  Experiment info = {'participant': 'sub-000', 'com_thermode': 'COM3', 'nramps': '3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  color = [0, 0, 0]
  colorSpace = named
  expName = 2024_RDpaindiscrimination_calibration
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = False
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Routines
  Routine trial
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  Routine Welcome
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    TextComponent textwelcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenue dans le programme de calibration.

        Veuillez vous assurer que le stimulateur est bien branché et ouvert.


        Une fois les vérifications faites, appuyez sur "p".
    KeyboardComponent key_resp
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent init_thermode
      Code Type = Auto->JS
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      Begin Experiment:
        # Import packages for thermode
        import serial
        import time
        from pytcsii import tcsii_serial
        import threading


        # Initialize thermode
        port_thermode = tcsii_serial(str(expInfo['com_thermode']))
        port_thermode.set_baseline(38)
        baseline = 38
        rise_time = 0.75
        port_thermode.port.write('Ue00000'.encode())

        #Set White Circle
        polygon_1 = visual.Circle(
            win=win, name='polygon',
            size=(0.5, 0.5),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= 'white', fillColor= 'white',
            opacity=1.0, depth=-1.0, interpolate=True)
      Begin Routine:
        # Remove mouse
        win.mouseVisible = False
  Routine instructions2
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    TextComponent text_5
      letterHeight = 0.032
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Dans la première phase, vous recevrez une série de stimulations augmentant en intensité. Nous débuterons avec des stimulations très faibles (probablement non douloureuses) et l’intensité augmentera graduellement. Après chaque stimulation, vous devrez évaluer verbalement l’intensité de la douleur ressentie. Si vous n’avez pas ressenti de douleur, veuillez déplacer le curseur à l'extrémité gauche de l'échelle.

        Après chaque stimulation thermique, nous vous demanderons également si vous pensez être capable de tolérer la prochaine stimulation. Si vous pensez ne pas être capable de tolérer la prochaine stimulation, nous arrêterons la série. Si vous pensez être en mesure de la tolérer, nous continuerons avec une stimulation d’une intensité plus forte. Notez que vous allez recevoir plusieurs stimulations pendant l’expérience, donc veillez à arrêter à une intensité que vous serez en mesure de tolérer plusieurs fois.

        Nous allons répéter ce processus 3 fois.

        Après cette phase, l’intensité maximale que vous aurez tolérée sera utilisée comme point de repère pour différentes intensités pour l’expérience au complet et vous ne recevrez jamais une stimulation excédant cette intensité.

        Dans la seconde phase, vous allez recevoir des stimulations d’intensités aléatoires sous votre niveau de tolérance et vous devrez évaluer la douleur ressentie après chaque choc.

        Appuyer sur la touche spéciale pour débuter
    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_start_ramp
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Prêt à commencer une série de stimulations.

        Expérimentateur :
        Assurez-vous que le stimulateur est connecté.

        Appuyer sur la touche spéciale pour commencer.
    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent reset_curr
      Code Type = Auto->JS
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      Begin Routine:
        # Start the index counter for thermode location
        curr_item = -1

        # Make sure mouse is gone!
        win.mouseVisible = False
  Routine confirm_continue
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    CodeComponent set_therm_2
      Code Type = Py
      Begin Experiment:
        # Initialize all the counter to 0
        curr_item = -1
        curr_item_loc = -1

        # Choose the font size for thermode location indicator
        loctherm_size = 0.02


        # Ramp intensities
        therm_intensity = [41, 42, 43, 44, 45, 46, 47, 48, 49, 50]

        # Inttialize empty lists
        intensities_list = []*3
        ratings_list = []*3
        accept_list = []*3
        fired_list = []*3
      Begin Routine:
        # Update counter
        curr_item += 1

        # Get current intensity
        intensity = therm_intensity[curr_item]

        #Set temp
        curr_temp = intensity

        # Calculate rise rate
        rise_curr = np.round((curr_temp - baseline)/rise_time, 1)

        # Set thermode
        port_thermode.set_stim(target=curr_temp, rise_rate=rise_curr, return_rate=rise_curr,
                    dur_ms=11500,
                    dur_mode='fixed_total',
                    surfaces=[1, 2, 3, 4, 5])
        fired = 0

        # Jitter waiting
        wait1jitter = np.random.choice([2000, 2100, 2200, 2300, 2400, 2500])
        # in secs
        wait1jitter = wait1jitter/1000

        # Get phase
        ramp_phase = 1

        # Get localisation
        curr_item_loc += 1
        thermode_localisation = 'T: ' + str(curr_item_loc)
      End Routine:
        # Log intensity
        Ramp.addData('intensity', intensity)

        # Log wait_jitter
        Ramp.addData('wait1_dur', wait1jitter)

        # QUit if q pressed
        if 'q' in key_resp_8.keys :
                Ramp.finished = 1
    TextComponent text_12
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyer sur le bouton pour la prochaine stimulation.
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    TextComponent text_10
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $thermode_localisation
    KeyboardComponent key_resp_8
      allowedKeys = 'p','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine wait
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    TextComponent text_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
      text [set every repeat] = +
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    TextComponent text_14
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
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      text [set every frame]:
        $thermode_localisation
  Routine therm_trig
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    CodeComponent therm_deliver
      Code Type = Auto->JS
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      Begin Routine:
        if fired == 0:
            fired = 1
            # Trigger thermode
            out_file = u'data/%s_%s/Calibration/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_calib_ramp_' + str(series.thisN).zfill(2) + '_temp_' + str(intensity) + '.csv')
            stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                                            args=(out_file, 11500,))
            stim_thread.start()
      Each Frame:
        # Draw polygon
        polygon_1.draw()
    TextComponent text_15
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text [set every frame]:
        $thermode_localisation
  Routine rating_scale
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    CodeComponent slidercode
      Code Type = Py
      Begin Experiment:
        # Initialize keyboard
        kb = keyboard.Keyboard()
      Begin Routine:
        # Initialize rating scale
        ratingScale = visual.RatingScale(win=win, name='ratingScale', lineColor=(255, 255, 255), low=0, high=100, precision=100, size=1, tickMarks=None, tickHeight=0, scale=None, labels=['Aucune\ndouleur','Pire douleur\nimaginable'], marker=visual.Rect(win, width=0.01, height=0.1, lineColor='white', fillColor='white', units='norm'), markerColor=(255, 255, 255), markerStart=0.5, textColor='white', pos=(0, 0), stretch=2, showValue=None, showAccept=None, textSize=1.2)

        # Get a random initial posistion
        pos = np.random.randint(1, 10)
        ratingScale.setMarkerPos(pos)

        # Max time for rating scale
        respDisplay = ''
        maxResp = 5

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        inc = 0.05
        wasmoved = 0

        while True:
            keys = kb.getKeys(['m', 'n', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    pos -= inc
                    wasmoved = 1
                if 'm' == key:
                    pos += inc
                    wasmoved = 1

                if pos > 10:
                    pos = 10
                elif pos < 0:
                    pos = 0

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    core.wait(0.1)
                    continueRoutine=False
                    break

            ratingScale.setMarkerPos(pos)
            ratingScale.draw()
            main_text.draw()
            confirm_text.draw()
            win.mouseVisible = False
            win.flip()
      End Routine:
        # Add data
        thisExp.addData('rating', ratingScale.getRating())
    RatingScaleComponent ratingScale
      forceEndRoutine = True
      high = 1000
      low = 0
      marker = slider
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      syncScreenRefresh = True
      visualAnalogScale = True
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      customize_everything:
        lineColor = (255, 255,255),
        low = 0,
        high = 1000,
        precision = 1000,
        size = 1,
        tickMarks = [0, 1000],
        tickHeight = 1,
        scale=None,
        labels = ['Aucune douleur', 'Pire douleur imaginable'],
        marker = visual.Rect(win, width=0.01, height=0.1, lineColor=(255, 255, 255), fillColor=(255, 255, 255), units='height'),
        markerColor = (255, 255, 255),
        markerStart=0.5,
        textColor = (255, 255, 255),
        pos = (0, 0),
        stretch = 2,
        showValue = False,
        showAccept = False,
        textSize = 1.2,
    TextComponent main_text
      letterHeight = 0.07
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Veuillez évaluer l'intensité de la stimulation que vous venez de recevoir.
    TextComponent confirm_text
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyer sur le bouton du Haut pour poursuivre.
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    TextComponent text_16
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $thermode_localisation
  Routine press_when_ready
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    CodeComponent log_code
      Code Type = Py
      Begin Experiment:
        series_trial = []
        ramp_trial = []
        intensities_list = []
        ratings_list = []
        fired_list = []
      End Routine:
        series_trial.append(series.thisN)
        ramp_trial.append(Ramp.thisN)
        intensities_list.append(intensity)
        fired_list.append(fired)
        ratings_list.append(ratingScale.getRating())



        # QUit if q pressed
        if 'n' in key_resp_3.keys :
                Ramp.finished = 1

        #Next block if intensity therm = 50c
        if therm_intensity[curr_item] == 50 :
            Ramp.finished = 1

        # Reset thermode counter if needed
        if curr_item_loc >= 3 :
            curr_item_loc = -1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Si vous pensez être capable de tolérer la prochaine stimulation, dites à l’expérimentatrice de continuer.


        Si vous ne pensez pas être capable de tolérer la prochaine stimulation, dites à l’expérimentatrice d’arrêter ici.
    KeyboardComponent key_resp_3
      allowedKeys = 'y', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $thermode_localisation
  Routine bloc_terminé
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    TextComponent block_done
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Bloc terminé
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  Routine compile_ramps
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    TextComponent premiere_partie
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Première partie de la calibration terminée
    CodeComponent compile
      Code Type = Py
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      Before Experiment:
        import pandas as pd
      Begin Routine:
        # Get data in a csv file
        ramp_data = {'series': series_trial,
                      'trial' : ramp_trial,
                      'intensity': intensities_list,
                      'rating': ratings_list,
                      'fired': fired_list}

        print('ramp_data is :', ramp_data)

        ramp_data = pd.DataFrame(data=ramp_data)

        # Save ramp data before next phase
        filenameramp = _thisDir + os.sep + u'data/%s_%s/Calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'ramp_ratings.csv' )
        ramp_data.to_csv(filenameramp)

        # Use only last run to get threshold and tolerance
        ramp_data_last = ramp_data[ramp_data.series==2]

        # Remove misfires
        ramp_data_last = ramp_data_last[ramp_data_last['fired'] == 1]

        # Get tolerance level
        tolerance = np.max(ramp_data_last.intensity)

        # Get min intensity above threshold
        ramp_data_above = ramp_data_last[ramp_data_last['rating'] > 0]
        threshold = np.min(ramp_data_above['intensity'])

        ramp_data['tolerance'] = tolerance
        ramp_data['threshold'] = threshold
        #ramp_data.to_csv(filenameramp)

        # Generate  intensities from low to tolerance
        rand_intensities = np.around(np.linspace(threshold, tolerance, 14), 1)
        np.random.shuffle(rand_intensities)
  Routine deuxieme_start
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    TextComponent debut_deuxieme
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Deuxième phase.

        Dans la seconde phase, vous allez recevoir des stimulations d’intensité aléatoire sous votre niveau de tolérance et vous devrez évaluer la douleur ressentie après chaque stimulation.

        Appuyer sur la touche spéciale pour débuter.
    KeyboardComponent key_resp_10
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent load_csv
      Code Type = Py
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      Begin Experiment:
        #intensity_list = [48.0, 45.3, 44.9, 43.4, 47.6, 43.0, 45.7, 44.2, 43.8, 46.1, 46.5, 44.5, 47.2, 46.8]
      Begin Routine:
        # Get intensities
        intensity_list = rand_intensities
  Routine press_when_ready2
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Appuyer sur le bouton pour la prochaine stimulation.
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    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_part_2
      Code Type = Auto->JS
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      Begin Experiment:
        curr_item_scd = -1
      Begin Routine:
        # Jitter waiting
        ramp_phase = 0
        wait1jitter = np.random.choice([2000, 2100, 2200, 2300, 2400, 2500])
        wait1jitter = wait1jitter/1000
        # Log intensity
        Ramp.addData('wait1_dur', wait1jitter)


        # Get the intensity
        curr_item_scd += 1
        valeur_temperature = intensity_list[curr_item_scd]

        fired = 0

        #Set temp & ramp thermode
        curr_temp = intensity_list[curr_item_scd]
        rise_curr = np.round((curr_temp - baseline)/rise_time)
        port_thermode.set_stim(target=curr_temp, rise_rate=rise_curr, return_rate=rise_curr,
                    dur_ms=11750,
                    dur_mode='fixed_total',
                    surfaces=[1, 2, 3, 4, 5])

        #Thermode localisation
        curr_item_loc += 1
        thermode_localisation = 'T: ' + str(curr_item_loc)
    TextComponent text_18
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $thermode_localisation
  Routine wait_2
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    TextComponent wait_text2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
      text [set every repeat] = +
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    TextComponent text_19
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $wait1jitter
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      text [set every frame]:
        $thermode_localisation
  Routine therm_trig2
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    CodeComponent therm_deliver_2
      Code Type = Auto->JS
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      Begin Routine:
        if fired == 0:
            fired = 1
            out_file = u'data/%s_%s/Calibration/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_calib_random_' + str(trials.thisN).zfill(2) + '_temp_' + str(curr_temp) + '.csv')
            stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                                            args=(out_file, 11500,))
            stim_thread.start()
      Each Frame:
        polygon_1.draw()
    TextComponent text_20
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
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      text [set every frame]:
        $thermode_localisation
  Routine rating_scale2
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    KeyboardComponent keyResp_2
      allowedKeys = 'a','1','2','3','4','5','6','7','8','9','0','return','backspace'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent slidercode_2
      Code Type = Py
      Begin Experiment:
        kb = keyboard.Keyboard()
        win.mouseVisible = False
        intensities_random = []
        ratings_random =[]
      Begin Routine:
        ratingScale_2 = visual.RatingScale(win=win, name='ratingScale', lineColor=(255, 255, 255), low=0, high=100, precision=100, size=1, tickMarks=None, tickHeight=0, scale=None, labels=['Aucune\ndouleur','Pire douleur\nimaginable'], marker=visual.Rect(win, width=0.01, height=0.1, lineColor='white', fillColor='white', units='norm'), markerColor=(255, 255, 255), markerStart=0.5, textColor='white', pos=(0, 0), stretch=2, showValue=None, showAccept=None, textSize=1.2)

        pos = np.random.randint(1, 10)
        ratingScale_2.setMarkerPos(pos)
      Each Frame:
        inc = 0.05
        wasmoved = 0

        while True:
            keys = kb.getKeys(['m', 'n', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    pos -= inc
                    wasmoved = 1
                if 'm' == key:
                    pos += inc
                    wasmoved = 1

                if pos > 10:
                    pos = 10
                elif pos < 0:
                    pos = 0

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    print(ratingScale_2.getRating())
                    core.wait(0.1)
                    continueRoutine=False
                    break

            #print(kb.state)
            ratingScale_2.setMarkerPos(pos)
            ratingScale_2.draw()
            main_text.draw()
            confirm_text.draw()
            win.mouseVisible = False
            win.flip()
      End Routine:
        Ramp.addData('therm_value', valeur_temperature)
        Ramp.addData('rating', ratingScale_2.getRating())
        ratings_random.append(ratingScale_2.getRating())

        if curr_item_loc >= 3 :
            curr_item_loc = -1
    RatingScaleComponent ratingScale_2
      forceEndRoutine = True
      high = 1000
      low = 0
      marker = slider
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      syncScreenRefresh = True
      visualAnalogScale = True
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      customize_everything:
        lineColor = (255, 255,255),
        low = 0,
        high = 1000,
        precision = 1000,
        size = 1,
        tickMarks = [0, 1000],
        tickHeight = 1,
        scale=None,
        labels = ['Aucune douleur', 'Pire douleur imaginable'],
        marker = visual.Rect(win, width=0.01, height=0.1, lineColor=(255, 255, 255), fillColor=(255, 255, 255), units='height'),
        markerColor = (255, 255, 255),
        markerStart=0.5,
        textColor = (255, 255, 255),
        pos = (0, 0),
        stretch = 2,
        showValue = False,
        showAccept = False,
        textSize = 1.2,
    TextComponent main_text_2
      letterHeight = 0.07
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Veuillez évaluer l'intensité de la stimulation que vous venez de recevoir.
    TextComponent confirm_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyer sur ESPACE pour poursuivre.
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    TextComponent text_21
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $thermode_localisation
  Routine thank_you_output_code
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    TextComponent text_13
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Terminé!
    CodeComponent choose_stim_2
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import numpy as np
        import matplotlib.pyplot as plt
        from scipy.optimize import minimize
      Begin Routine:
        # Get data in a csv file
        ramp_data = {'intensity': intensity_list,
                      'rating': ratings_random}

        # Get tolerance level and offset a bit
        tolerance = np.max(intensity_list)

        # Création d'un DataFrame à partir du dictionnaire 'ramp_data'
        ramp_df = pd.DataFrame(ramp_data)
        print('ramp_df is : ', ramp_df)

        # Sélection des lignes avec un 'rating' positif
        ramp_data_above = ramp_df[ramp_df['rating'] > 0]

        # Obtenir le minimum d'intensité parmi les valeurs au-dessus du seuil
        threshold = np.min(ramp_data_above['intensity'])



        # Get min intensity above threshold
        #ramp_data_above = ramp_data[ramp_data['rating'] > 0]
        #threshold = np.min(ramp_data_above['intensity'])

        # Filtrer les données avec un rating positif
        #ramp_data_above = {
            #'intensity': [intensity for intensity, rating in zip(valeur_temperature, ratings_random) if rating > 0],
            #'rating': [rating for rating in ratings_random if rating > 0]}
      End Experiment:
        xdata = [i for i in intensity_list]

        target_rating = [0.3, 0.6]
        target_rating = [c*100 for c in target_rating]
        ratings_random = [(c/np.max(ratings_random))*100 for c in ratings_random]
        ydata = ratings_random
        intensities = np.arange(threshold, tolerance+0.1, 0.1)

        rate_data = pd.DataFrame()
        rate_data['ydata'] = ydata
        rate_data['xdata'] = xdata

        filenameramp_png = _thisDir + os.sep + u'data/%s_%s/Calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.png' )
        filenameramp_csv = _thisDir + os.sep + u'data/%s_%s/Calibration/%s_%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], 'fitted_values.csv' )


        def fit_model(func_type, params, levels):
            return {
                #Scale down by 0.1 to prevent overflow error
                "linear" : params[0] + params[1] * levels,
                "hyper"  : params[0] + params[1]/(params[2] + levels),
                "para"   : params[0] + params[1] * levels + params[2] * (levels**2),
                "expo"   : params[0] + params[1]*(levels**params[2])
                }[func_type]

        def get_model_sse(params, rate_data, func):

            # mean center to remove intercept
            fitted = fit_model(func, params, rate_data['xdata'])
            sse = np.sum((rate_data['ydata'] - fitted)**2)

            return sse

        results = dict()
        models = ['linear', 'hyper', 'para', 'expo']
        for func in models:
            results[func] = dict()
            res = minimize(fun=get_model_sse, x0=[1, 1, 1],
                            args=(rate_data, func),
                            method='SLSQP',
                            options={'maxiter': 100})

            results[func]['fitted'] = fit_model(func, res['x'], intensities)
            results[func]['sse'] = res['fun']
            results[func]['params'] = res['x']
            results[func]['stim_val'] = []
            results[func]['fitted_val'] = []

            for t in target_rating:
                loc = np.argmin(np.abs(results[func]['fitted'] - t))
                results[func]['stim_val'].append(intensities[loc])
                results[func]['fitted_val'].append(results[func]['fitted'] [loc])
            # Save at each model in case crash
            pd.DataFrame(results).to_csv(filenameramp_csv)
            win_model = models[np.argmin([results[c]['sse'] for c in list(results.keys())])]
            results_temp = results.copy()
            results_temp['win_model'] = win_model
            results_temp['target_ratings'] = str(target_rating)
            results_temp['selected_intensities'] = str(results[win_model]['stim_val'])
            results_temp['extrapolated_ratings'] = str(results[win_model]['fitted_val'])
            pd.DataFrame(results_temp).to_csv(filenameramp_csv)
            # Plot
            calib_plot = plt.figure(figsize=(6, 5))
            plt.scatter(xdata, ydata, label='Actual ratings')
            plt.plot(intensities, results[win_model]['fitted'], label='Best fit', color='orange')
            plt.scatter(results[win_model]['stim_val'], results[win_model]['fitted_val'], label=win_model
                        + ' fitted values',
                        alpha=0.9, marker='^', s=60, color='orange')
            plt.plot(intensities, results['linear']['fitted'], label='Linear fit', color='green')
            plt.scatter(results['linear']['stim_val'], results['linear']['fitted_val'], label='Linearly spaced values',
                        alpha=0.5, color='green')
            plt.ylim(-1, 105)
            # plt.title(expInfo['participant'])
            plt.xlabel('Intensity (Celsius)')
            plt.ylabel('Rating (% max rating)')
            plt.legend()
            plt.savefig(filenameramp_png)

        win_model = models[np.argmin([results[c]['sse'] for c in list(results.keys())])]

        results['win_model'] = win_model
        results['target_ratings'] = str(target_rating)
        results['selected_intensities'] = str(results[win_model]['stim_val'])
        results['extrapolated_ratings'] = str(results[win_model]['fitted_val'])

        # Save final
        pd.DataFrame(results).to_csv(filenameramp_csv)
        # Plot
        calib_plot = plt.figure(figsize=(6, 5))
        plt.scatter(xdata, ydata, label='Actual ratings')
        plt.plot(intensities, results[win_model]['fitted'], label='Best fit', color='orange')
        plt.scatter(results[win_model]['stim_val'], results[win_model]['fitted_val'], label=win_model
                    + ' fitted values',
                    alpha=0.9, marker='^', s=60, color='orange')
        plt.plot(intensities, results['linear']['fitted'], label='Linear fit', color='green')
        plt.scatter(results['linear']['stim_val'], results['linear']['fitted_val'], label='Linearly spaced values',
                    alpha=0.5, color='green')
        plt.ylim(-1, 105)
        # plt.title(expInfo['participant'])
        plt.xlabel('Intensity (Celsius)')
        plt.ylabel('Rating (% max rating)')
        plt.legend()
        plt.savefig(filenameramp_png)
Flow
  Routine Welcome
  Routine instructions2
  LoopInitiator series loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = expInfo['nramps']
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    Routine instructions_start_ramp
    LoopInitiator Ramp loopType="TrialHandler"
      endPoints = [0,1]
      loopType = random
      nReps = 10
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      Routine confirm_continue
      Routine wait
      Routine therm_trig
      Routine rating_scale
      Routine press_when_ready
    LoopTerminator Ramp
    Routine bloc_terminé
  LoopTerminator series
  Routine compile_ramps
  Routine deuxieme_start
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [0,1]
    loopType = random
    nReps = len(intensity_list)
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    Routine press_when_ready2
    Routine wait_2
    Routine therm_trig2
    Routine rating_scale2
  LoopTerminator trials
  Routine thank_you_output_code
