PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s/QUEST/%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'] )
  Experiment info = {'participant': 'sub-000', 'com_thermode': 'COM3', 'temp_plateau': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  color = [0,0,0]
  colorSpace = named
  expName = 2024_RDpaindiscrimination_QUEST
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    CodeComponent init_thermode
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        # Initialize QUEST
        import numpy as np
        import random
        import threading
        from psychopy import data
        from questplus.psychometric_function import weibull

        # Thermode
        from pytcsii import tcsii_serial
        port_thermode = tcsii_serial(str(expInfo['com_thermode']), beep=False)
        port_thermode.set_baseline(38)
        port_thermode.port.write('Ue11111'.encode()) # Enable temp profile

        # Get the plateau temp from the calibration
        temp_plateau = float(expInfo['temp_plateau'])

        # Stimulus domain.
        intensities = np.arange(0.2, 1.2, 0.1) # Difference from plateau
        thresholds = intensities.copy()
        slopes = np.linspace(0.1, 15, 100)
        lapses = np.arange(0., 0.02, 0.01)

        # Experiment parameters
        num_trials_max = 40

        # create  "staircase"
        staircase = data.StairHandler(startVal=0.8,
                                      stepType='lin',
                                      stepSizes = [0.4, 0.3, 0.2, 0.1],
                                      nUp=1,
                                      minVal=0.3,
                                      maxVal=1,
                                      nDown=2,
                                      nTrials=num_trials_max)

        baseline = 38
        rise_time = .75

        rise_plateau = np.round((temp_plateau - baseline)/rise_time, 1)

        part = int(expInfo['participant'][4:])-1

        # Part pair ou impair : Sélection couleur
        col1 = [1, 0.5059, -1]
        col2 = [-1, 0.38, 0.88]
        col3 = [-0.5, -0.5, -0.5]
        if part % 2 == 0:
            #Triangle bleu, carré jaune
            color_inactif_trig = col1
            color_actif_carre = col2
            #texte oui-non
            loca_textl = 'OUI              '
            loca_textr = '              NON'
            detectl = 1
            detectr = 0

            print('impair')
        else:
            #Triangle jaune, carrée bleu
            color_inactif_trig = col2
            color_actif_carre = col1
            print('pair')
            #texte oui-non
            loca_textl = 'NON              '
            loca_textr = '              OUI'
            detectl = 0
            detectr = 1


        #Polygon color
        polygon_1 = visual.Circle(
            win=win, name='polygon',
            size=(0.5, 0.5),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= 'white', fillColor= 'white',
            opacity=1.0, depth=-1.0, interpolate=True)

        #Black polygon

        polygon_1_black = visual.Circle(
            win=win, name='polygon_1_black',
            size=(0.4, 0.4),
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= col3, fillColor= col3,
            opacity=1.0, depth=-1.0, interpolate=True)


        # Font size
        cross_size = 0.2
        loctherm_size = 0.02

        curr_item = -1
        count_trials = -1
      Begin Routine:
        win.mouseVisible = False
    TextComponent text_bonjour
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenue dans le programme de calibration de discrimination.

        Si vous ressentez une différence de chaleur pendant la stimulation,
        veuillez sélectionner OUI ou NON à l'aide de la boîte de commande.

        Expérimentateur.trice, appuyer sur 'p' démarrer l'expérience

        Bonne expérience.
    KeyboardComponent initialisation
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine triggerrrs
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    CodeComponent trigger_pic_2
      Code Type = Auto->JS
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      Begin Experiment:
        intensities_all = []
        responses_all = []
      Begin Routine:
        response_pic = 0

        # Get pic stim
        questpic = staircase.next()
        pic = temp_plateau + questpic

        # Convert to str to send to thermode
        pic_str = str(int(np.round(pic, 1)*10))
        temp_plateau_str = str(int(np.round(temp_plateau, 1)*10))


        response_pic = None
        # Jitter duration
        dur_plateau_1 = round(random.uniform(3.25, 4.75), 2)

        # Plateau 2 is difference 10 - others
        dur_plateau_2 = round(10 - (dur_plateau_1 + 1.2), 2)

        # Detection cue always start at 3.5
        start1 = 3
        # Responses start after rise to plateau + plateau + pic (1.2)
        start2 = 8

        # Convert to string
        dur_send = str(int(dur_plateau_1*100))
        dur_send2 = str(int(dur_plateau_2*100))

        #Pic or not?
            # Set thermode
        port_thermode.set_rd_plateau(temp_plateau=temp_plateau_str,
                          temp_pic=pic_str,
                          dur_plateau_1_10ms=dur_send,
                          dur_plateau_2_10ms=dur_send2)

        ## Trigger thermode in other thread
        out_file = u'data/%s_%s/QUEST/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_' + str(trials.thisN).zfill(2) + '.csv')
        stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                             args=(out_file, 11500,))
        stim_thread.start()
      Each Frame:
        #Polygon normal avant signal
        if (t <= start1):
            polygon_1.draw()

        #Remplir en noir pour signal
        if(t >= start1) and (t <= start2):
            polygon_1.draw()
            polygon_1_black.draw()

        # Check response and change color answer
        if discrimin_resp.status == STARTED and len(discrimin_resp.keys) != 0:
            if discrimin_resp.keys[-1] == 'm':
                responsel.color = (0, 0, 0)
                response_pic = detectr
            elif discrimin_resp.keys[-1] == 'n':
                responser.color = (0, 0, 0)
                response_pic = detectl

        #if (t >= 7.90) :
            #win.flip()
      End Experiment:
        #print(f'\nParameter estimates:\n')
        #for param_name, value in staircase.paramEstimate.items():
        #    print(f'    {param_name}: {value:.3f}')
        #    thisExp.addData(param_name, value)
        #
        #pic_a_utiliser = staircase.paramEstimate['threshold'] + temp_plateau
        #thisExp.addData('pic_a_utiliser', pic_a_utiliser)


        print('mean of final 6 reversals = %.3f' %(np.average(staircase.reversalIntensities[-6:])))
        thresh = np.average(staircase.reversalIntensities[-6:])
        thisExp.addData('mean_6_reversals', thresh)
        thisExp.addData('pic_a_utiliser', temp_plateau + thresh)


        try:
            import matplotlib.pyplot as plt
            quest_intensities = intensities_all
            quest_detections = responses_all

            fit = data.FitWeibull(quest_intensities, quest_detections, expectedMin=0,
                                    guess=[0.1, 0.5])
            smoothInt = np.arange(min(quest_intensities), max(quest_detections), 0.001)
            smoothResp = fit.eval(smoothInt)
            # thresh = staircase.paramEstimate['threshold']
            thresh_final = fit.inverse(0.75)
            print(thresh_final)
            thisExp.addData('threshold', thresh_final)


            plt.figure(figsize=(10,5))
            plt.subplot(122)
            plt.plot(smoothInt, smoothResp, '-')
            # plt.title('threshold = %0.3f' %(thresh))
            plt.axvline(x=thresh_final, color='k', linestyle='--')
            #plot points
            plt.plot(quest_intensities, quest_detections, 'o')
            plt.ylim([-0.5,1.5])
            out_file = u'data/%s_%s/QUEST/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_staircase.png')
            plt.savefig(out_file)
        except:
            thisExp.addData('threshold', 'failed')
            print('Fitting weibull failed')
      End Routine:
        trials.addData('dur_plateau1', dur_plateau_1)
        trials.addData('dur_plateau2', dur_plateau_2)
        trials.addData('dur_plateau1_sent', dur_send)
        trials.addData('dur_plateau2_sent', dur_send2)
        trials.addData('start_plateau_2_resp', start2)
        trials.addData('start_detect_cue', start1)
        trials.addData('dur_pic', 1.2)
        trials.addData('dur_rise', 0.75)
        trials.addData('temp_plateau_sent', temp_plateau_str)

        trials.addData('loca_thermode', thermode_loca[curr_item])
        trials.addData('pic_sent', pic_str)
        trials.addData('quest_intens', questpic)
        trials.addData('pic_response', response_pic)
        # Reset color
        responsel.color = 'white'
        responser.color = 'white'



        if response_pic == 1:
            outcome = 1
            staircase.addResponse(outcome, questpic)
            count_trials +=1
            intensities_all.append(questpic)
            responses_all.append(outcome)
        elif response_pic == 0:
            outcome = 0
            staircase.addResponse(outcome, questpic)
            count_trials +=1
            intensities_all.append(questpic)
            responses_all.append(outcome)
        else:
            pass


        if count_trials == 31:
            trials.finished = 1
    TextComponent thermode_locali_pic
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.2
      text [set every repeat] = $thermode_localisation
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    KeyboardComponent discrimin_resp
      allowedKeys = 'n', 'm'
      forceEndRoutine = False
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent responsel
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text [set every repeat] = $loca_textl
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    TextComponent percu_or
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text = Avez-vous perçu un changement?
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    TextComponent responser
      letterHeight = 0.08
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text = $loca_textr
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  Routine wait
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    CodeComponent get_list_discri_2
      Code Type = Auto->JS
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      Begin Routine:
        # Counter for thermode loc
        curr_item += 1
        thermode_loca = [0, 1, 2, 3]*12
        thermode_localisation = 'T : ' + str(thermode_loca[curr_item])
    TextComponent text_pic
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $thermode_localisation
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    TextComponent croix_3
      letterHeight = cross_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine Cali_fin
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Calibration terminée.
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    endPoints = [0,1]
    loopType = sequential
    nReps = num_trials_max
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    Routine wait
    Routine triggerrrs
  LoopTerminator trials
  Routine Cali_fin
