PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s/%s_%s_%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'] )
  Experiment info = {'participant': 'sub-000', 'temp_flat': '', 'temp_active': '', 'temp_pic_set': '', 'com_thermode': 'COM3'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  expName = 2024_RDpaindiscrimination_maintask
  keyboardBackend = PsychToolbox
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Routines
  Routine Set_up
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bienvenue!

        Appuyer sur 'p' lorsque vous serez prêt
    KeyboardComponent key_resp_3
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent init_thermode
      Code Type = Auto->JS
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      Begin Experiment:
        # EEG
        import struct
        import time
        import random
        import pandas as pd
        import threading


        # Thermode
        from pytcsii import tcsii_serial
        port_thermode = tcsii_serial(str(expInfo['com_thermode']))
        port_thermode.set_baseline(38)


        baseline = 38
        rise_time = .75

        temp_flat = float(expInfo['temp_flat'])
        temp_active = float(expInfo['temp_active'])
        temp_pic_set = float(expInfo['temp_pic_set'])

        rise_flat = np.round((temp_flat - baseline)/rise_time, 1)
        rise_active = np.round((temp_active - baseline)/rise_time, 1)

        part = int(expInfo['participant'][4:])-1

        # Part pair ou impair : Sélection couleur
        col1 = [1, 0.5059, -1]
        col2 = [-1, 0.38, 0.88]
        col3 = [-0.5, -0.5, -0.5]
        if part % 2 == 0:
            #Triangle bleu, carré jaune
            color_inactif_trig = col1
            color_actif_carre = col2
            #texte oui-non
            loca_textl = 'OUI              '
            loca_textr = '              NON'
            detectl = 1
            detectr = 0

            print('impair')
        else:
            #Triangle jaune, carrée bleu
            color_inactif_trig = col2
            color_actif_carre = col1
            print('pair')
            #texte oui-non
            loca_textl = 'NON              '
            loca_textr = '              OUI'
            detectl = 0
            detectr = 1


        #Polygon color
        polygon_1 = visual.ShapeStim(
            win=win, name='polygon',
            size=(0.5, 0.5), vertices='triangle',
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= color_inactif_trig, fillColor= color_inactif_trig,
            opacity=1.0, depth=-1.0, interpolate=True)
        polygon_2 = visual.Rect(
            win=win, name='polygon_2',
            width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= color_actif_carre, fillColor= color_actif_carre,
            opacity=None, depth=-2.0, interpolate=True)

        #Black polygon
        black = [-1.0000, -1.0000, -1.0000]

        polygon_1_black = visual.ShapeStim(
            win=win, name='polygon_1_black',
            size=(0.4, 0.4), vertices='triangle',
            ori=0.0, pos=(0, -.025), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= col3, fillColor= col3,
            opacity=1.0, depth=-1.0, interpolate=True)

        polygon_2_black = visual.Rect(
            win=win, name='polygon_2_black',
            width=(0.4, 0.4)[0], height=(0.4, 0.4)[1],
            ori=0.0, pos=(0, 0), anchor='center',
            lineWidth=1.0,     colorSpace='rgb',  lineColor= col3, fillColor= col3,
            opacity=None, depth=-2.0, interpolate=True)


        # Get file for randomisation
        liste_test = pd.read_csv('RD_discrimination_random_eval.csv')
        curr_item_test = -1

        liste_discri = pd.read_csv('RD_discrimination_random_discrimnation.csv')
        curr_item_discri = -1

        liste_eval = pd.read_csv('RD_discrimination_random_evalpla.csv')
        curr_item_eval = -1

        # Font size
        cross_size = 0.2
        loctherm_size = 0.02
      Begin Routine:
        win.mouseVisible = False
  Routine electrode_check
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nous allons vérifier si
        l'électrode fonctionne


        Expérimentateur.trice,
         appuyer sur 'p'
    KeyboardComponent key_resp_5
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_eval
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pour les prochains essais, vous devrez ÉVALUER l'intensité de la douleur ressentie. 
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    KeyboardComponent key_resp_6
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause_5_test
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    CodeComponent get_file_eval
      Code Type = Auto->JS
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      Begin Routine:
        # Get trials in psychopy
        curr_item_test += 1

        trial = 'trial_' + str(curr_item_test).zfill(2)
        print('test trial is ' + trial)

        cond, loc = liste_test.loc[part, trial].split('_')
        print('test cond and loc ' + cond + '   ' + loc)

        thermode_localisation = 'T: ' + str(loc)
    TextComponent text_2
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text [set every frame]:
        $thermode_localisation
    TextComponent croix
      letterHeight = cross_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine Phase_Test
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    CodeComponent Stim_selection
      Code Type = Auto->JS
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      Begin Routine:
        # Disable temp profile
        port_thermode.port.write('Ue00000'.encode())

        dur_plateau1 = 4
        dur_plateau2 = 4.8
        print(cond)
        if cond == 'inactive' :
            port_thermode.set_stim(target=temp_flat, rise_rate=rise_flat, return_rate=rise_flat,
                        dur_ms=11500,
                        dur_mode='fixed_total',
                        surfaces=[1, 2, 3, 4, 5])
            temp_trial_sent = temp_flat

        elif cond == 'active' :
            port_thermode.set_stim(target=temp_active, rise_rate=rise_active, return_rate=rise_active,
                        dur_ms=11500,
                        dur_mode='fixed_total',
                        surfaces=[1, 2, 3, 4, 5])
            temp_trial_sent = temp_active
        print(temp_trial_sent)
        ## Trigger thermode in other thread
        out_file = u'data/%s_%s/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_eval_cond_' + str(curr_item_test).zfill(2) + '.csv')
        stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                                        args=(out_file, 11500,))
        stim_thread.start()
      Each Frame:
        if cond == 'active' :
            polygon_1.draw()
        else :
            polygon_2.draw()
      End Routine:
        loop_test.addData('loca_thermode', loc)
        loop_test.addData('condition', cond)
        loop_test.addData('temp_trial_sent', temp_trial_sent)
    TextComponent thermode_locali
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every frame] = $thermode_localisation
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  Routine eval_douleur
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    CodeComponent slidercode
      Code Type = Py
      Begin Experiment:
        kb = keyboard.Keyboard()
        win.mouseVisible = False
      Begin Routine:
        ratingScale = visual.RatingScale(win=win, name='ratingScale', lineColor=(255, 255, 255), low=0, high=100, precision=100, size=1, tickMarks=None, tickHeight=0, scale=None, labels=['Aucune\ndouleur','Pire douleur\nimaginable'], marker=visual.Rect(win, width=0.01, height=0.1, lineColor='white', fillColor='white', units='norm'), markerColor=(255, 255, 255), markerStart=0.5, textColor='white', pos=(0, 0), stretch=2, showValue=None, showAccept=None, textSize=1.2)

        pos = np.random.randint(1, 10)
        ratingScale.setMarkerPos(pos)
      Each Frame:
        inc = 0.05
        wasmoved = 0

        while True:
            keys = kb.getKeys(['m', 'n', 'space', 'escape'], waitRelease=False, clear=False)
            if keys and not keys[-1].duration:
                key = keys[-1].name
                if 'n' == key:
                    pos -= inc
                    wasmoved = 1
                if 'm' == key:
                    pos += inc
                    wasmoved = 1

                if pos > 10:
                    pos = 10
                elif pos < 0:
                    pos = 0

                # check for quit (typically the Esc key)
                if "escape" ==  key:
                    core.quit()

                if 'space' == key:
                    print(ratingScale.getRating())
                    core.wait(0.1)
                    continueRoutine=False
                    break

            #print(kb.state)
            ratingScale.setMarkerPos(pos)
            ratingScale.draw()
            main_text.draw()
            confirm_text.draw()
            win.mouseVisible = False
            win.flip()
      End Routine:
        #thisExp.addData('loca_thermode', loc)
        #thisExp.addData('condition', cond)
        #thisExp.addData('temp_trial_sent', temp_flat)
    RatingScaleComponent ratingScale
      forceEndRoutine = True
      high = 1000
      low = 0
      marker = slider
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      visualAnalogScale = True
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      customize_everything:
        lineColor = (255, 255,255),
        low = 0,
        high = 1000,
        precision = 1000,
        size = 1,
        tickMarks = [0, 1000],
        tickHeight = 1,
        scale=None,
        labels = ['Aucune douleur', 'Pire douleur imaginable'],
        marker = visual.Rect(win, width=0.01, height=0.1, lineColor=(255, 255, 255), fillColor=(255, 255, 255), units='height'),
        markerColor = (255, 255, 255),
        markerStart=0.5,
        textColor = (255, 255, 255),
        pos = (0, 0),
        stretch = 2,
        showValue = False,
        showAccept = False,
        textSize = 1.2,
    TextComponent main_text
      letterHeight = 0.07
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Veuillez évaluer l'intensité de la stimulation que vous venez de recevoir.
    TextComponent confirm_text
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Appuyer sur le bouton du haut pour poursuivre.
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  Routine Fin_test
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Électrode Ok

        2 Évaluations douleurs

        Suivi par

        4 Évaluations de discriminations

        Répété 4 fois


        Appuyer sur 'p' pour continuer
    KeyboardComponent key_resp_4
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause_5_EVA
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    CodeComponent EVA_Read
      Code Type = Auto->JS
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      Begin Routine:
        curr_item_eval += 1
        print('curr_item_eval is ' + str(curr_item_eval))
        trial = 'trial_' + str(curr_item_eval).zfill(2)
        print('eval trial is ' + trial)

        cond, loc = liste_eval.loc[part, trial].split('_')
        print('eval cond and loc ' + cond + '   ' + loc)

        thermode_localisation = 'T : ' + str(loc)
    TextComponent text_eva
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $thermode_localisation
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    TextComponent croix_2
      letterHeight = cross_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine tâche_PIC
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    CodeComponent trigger_pic
      Code Type = Auto->JS
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      Begin Experiment:
        # Get pic stim
        pic_str = str(int(np.round(temp_pic_set, 1)*10))
        temp_flat_str = str(int(np.round(temp_flat, 1)*10))
      Begin Routine:
        thermode_localisation = 'T : ' + str(loc)
        response_pic = None

        # Jitter duration
        dur_plateau_1 = round(random.uniform(3.25, 4.75), 2)

        # Plateau 2 is difference 10.95 - others
        dur_plateau_2 = round(10 - (dur_plateau_1 + 1.2), 2)

        # Detection cue always start at 3.5
        start1 = 3
        # Responses start after rise to plateau + plateau + pic (1.2)
        start2 = 8


        # Convert to string
        dur_send = str(int(dur_plateau_1*100))
        dur_send2 = str(int(dur_plateau_2*100))

        #Pic or not?

        if pic == 'pic-present' :
            # Set thermode
            port_thermode.port.write('Ue11111'.encode())
            port_thermode.set_rd_plateau(temp_plateau=temp_flat_str,
                              temp_pic=pic_str,
                              dur_plateau_1_10ms=dur_send,
                              dur_plateau_2_10ms=dur_send2)
        else :
            # Set thermode
            port_thermode.port.write('Ue11111'.encode())
            port_thermode.set_rd_plateau(temp_plateau=temp_flat_str,
                              temp_pic=temp_flat_str,
                              dur_plateau_1_10ms=dur_send,
                              dur_plateau_2_10ms=dur_send2)

        # Trigger thermode in other thread
        out_file = u'data/%s_%s/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_pic_' + str(curr_item_discri).zfill(2) + '.csv')
        stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                             args=(out_file, 11500,))
        stim_thread.start()
      Each Frame:
        #Polygon normal avant signal
        if (t <= dur_plateau_1) and cond == 'active':
            polygon_1.draw()
        if (t <= dur_plateau_1) and cond == 'inactive':
            polygon_2.draw()

        #Remplir en noir pour signal
        if(t >= start1) and cond == 'active' and (t <= start2):
            polygon_1.draw()
            polygon_1_black.draw()
        if (t >= start1) and cond == 'inactive' and (t <= start2):
            polygon_2.draw()
            polygon_2_black.draw()
        # Check response and change color answer
        if discrimin_resp.status == STARTED and len(discrimin_resp.keys) != 0:
            if discrimin_resp.keys[-1] == 'm':
                responsel.color = (0, 0, 0)
                response_pic = detectr
            elif discrimin_resp.keys[-1] == 'n':
                responser.color = (0, 0, 0)
                response_pic = detectl

        #if (t >= 7.90) :
            #win.flip()
      End Routine:
        trials.addData('dur_plateau1', dur_plateau_1)
        trials.addData('dur_plateau2', dur_plateau_2)
        trials.addData('dur_plateau1_sent', dur_send)
        trials.addData('dur_plateau2_sent', dur_send2)
        trials.addData('start_plateau_2_resp', start2)
        trials.addData('dur_pic', 1.2)
        trials.addData('dur_rise', 0.75)

        thisExp.addData('loca_thermode', loc)
        thisExp.addData('condition', cond)
        thisExp.addData('pic_presence', pic)
        trials.addData('pic_response', response_pic)
        # Reset color
        responsel.color = 'white'
        responser.color = 'white'
    TextComponent thermode_locali_pic
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.95
      text [set every repeat] = $thermode_localisation
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    KeyboardComponent discrimin_resp
      allowedKeys = 'n', 'm'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent responsel
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text [set every repeat] = $loca_textl
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    TextComponent percu_or
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text = Avez-vous perçu un changement?
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    TextComponent responser
      letterHeight = 0.08
      startVal [time (s)] = $start2
      stopVal [duration (s)] = 3
      text = $loca_textr
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  Routine tâche_EVA
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    CodeComponent EVA_Trig
      Code Type = Auto->JS
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      Begin Routine:
        port_thermode.port.write('Ue00000'.encode())


        thermode_localisation = 'T : ' + str(loc)

        #
        port_thermode.set_stim(target=temp_flat, rise_rate=rise_flat, return_rate=rise_flat,
                    dur_ms=11500,
                    dur_mode='fixed_total',
                    surfaces=[1, 2, 3, 4, 5])

        ## Trigger thermode in other thread
        out_file = u'data/%s_%s/%s_%s_%s%s' % (expInfo['participant'], data.getDateStr(format="%Y-%m-%d"), expInfo['participant'], expName, expInfo['date'], expInfo['participant'] + '_temp_trial_eval_pla_' + str(curr_item_eval).zfill(2) + '.csv')
        stim_thread = threading.Thread(target=port_thermode.trigger_and_save_temp_rd,
                                   args=(out_file, 11500,))
        stim_thread.start()
      Each Frame:
        if cond == 'active' :
            polygon_1.draw()
        else :
            polygon_2.draw()
      End Routine:
        thisExp.addData('loca_thermode', loc)
        thisExp.addData('condition', cond)
        thisExp.addData('temp_trial_sent', temp_flat)
    TextComponent thermode_locali_EVA
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      text [set every frame] = $thermode_localisation
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  Routine break_entre_bloc
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    CodeComponent Clock
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        timer = core.Clock()
      Begin Routine:
        stimclock = core.Clock()
        starttime = stimclock.getTime()
      Each Frame:
        remaining = str(60 - round(stimclock.getTime()- starttime))
        text_clock = '      Bloc Terminé, pause '   +  remaining  + ' sec        ' + '           Appuyer sur p lorsque vous serez prêt pour le prochain bloc.    '
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $text_clock
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    KeyboardComponent key_resp_2
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine merci
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Merci pour votre participation
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  Routine pause_5_pic
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    CodeComponent get_list_discri_2
      Code Type = Auto->JS
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      Begin Routine:
        curr_item_discri += 1

        print(curr_item_discri)
        trial = 'trial_' + str(curr_item_discri).zfill(2)
        cond, pic, loc = liste_discri.loc[part, trial].split('_')
        thermode_localisation = 'T : ' + str(loc)
        print('disc trial_pic is ' + trial)
        print('disc Pic : cond and loc ' + cond + '   ' + loc)
    TextComponent text_pic
      letterHeight = loctherm_size
      pos = (-.70, -.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $thermode_localisation
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    TextComponent croix_3
      letterHeight = cross_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = +
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  Routine instructions_discrim
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pour les prochains essais, vous devrez DÉTECTER un changement de température, en indiquant si le changement était présent ou non lorsque demandé.
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    KeyboardComponent key_resp_7
      allowedKeys = 'p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Set_up
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine electrode_check
    Routine instructions_eval
    LoopInitiator loop_test loopType="TrialHandler"
      loopType = sequential
      nReps = 16
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      Routine pause_5_test
      Routine Phase_Test
      Routine eval_douleur
    LoopTerminator loop_test
    Routine Fin_test
    LoopInitiator loop_eval_discri loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 4
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      Routine instructions_eval
      LoopInitiator loop_eval loopType="TrialHandler"
        loopType = random
        nReps = 2
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        Routine pause_5_EVA
        Routine tâche_EVA
        Routine eval_douleur
      LoopTerminator loop_eval
      Routine instructions_discrim
      LoopInitiator loop_discri loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine pause_5_pic
        Routine tâche_PIC
      LoopTerminator loop_discri
    LoopTerminator loop_eval_discri
    Routine break_entre_bloc
  LoopTerminator trials
  Routine merci
